PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = demo_eye_tracking
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Routines
  Routine loading_trial
    CodeComponent configuration_code
      Code Type = JS
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      Begin JS Experiment:
        // Download the webgazer library and re-download seedrandom.js (since webgazer
        // overrides it with a version that conflicts with PsychoJS)
        psychoJS.downloadResources([
          { name: 'webgazer.js', path: 'js/webgazer-2.0.1.tp.js' },
          { name: 'seedrandom.js', path: 'https://cdnjs.cloudflare.com/ajax/libs/seedrandom/3.0.1/seedrandom.min.js' }
        ]);
        // Initialize x and y arrays; we use these to calculate running averages of
        // current gaze position; the longer the window, the slower, but more fluent
        // the updates
        let averagingWindow = 10;
        window.xGazes = new Array(averagingWindow ).fill(0);
        window.yGazes = new Array(averagingWindow ).fill(0);
        // Timestamp for last time eyes exited validation box
        window.eyesExitedTimestamp= (new Date).getTime();
        // No. of ms to keep webcam thumbnail visible after eyes returned into validation box
        window.eyesReturnedDelay = 3000;
        // DEBUG
        window.psychoJS = psychoJS;
      Each JS Frame:
        // Continue once the webgazer global is available
        continueRoutine = !window.hasOwnProperty('webgazer');
    TextComponent loading_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Downloading additional resources.

        One moment please...
  Routine webcam_trial
    TextComponent intro_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        demo_eye_tracking: starting webcam

        This experiment demonstrates eye tracking via the webgazer library.

        You should see your web-browser request access to your webcam. You might need to click on this text to make that happen. Please permit access, and wait a little while. Your webcam video should appear in the top-left of the screen.
    CodeComponent start_webgazer
      Code Type = JS
      Begin JS Routine:
        // Show webcam thumbnail and face feedback box, but not face overlay and gaze dot
        window.webgazer.params.showVideoPreview = true;
        window.webgazer.params.showFaceFeedbackBox = true;
        window.webgazer.params.showFaceOverlay = false;
        window.webgazer.params.showGazeDot = false
        // Start eye tracking
        window.webgazer
            // Called on each eye tracking update
            .setGazeListener(function(data, clock) {
              if (data !== null) {
                // Remove first element from gazes array, add current gaze at the end
                window.xGazes.shift();
                window.xGazes.push(data.x);
                window.yGazes.shift();
                window.yGazes.push(data.y);
               }
            })
            .begin();
            //.showPredictionPoints(true);
      Each JS Frame:
        // Finish routine once everything is ready
        continueRoutine =
          !window.webgazer.isReady() ||
          document.getElementById('webgazerFaceFeedbackBox') === null ||
          document.getElementById('webgazerVideoFeed') === null;
  Routine intro_calibatrion_trial
    TextComponent calibration_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        demo_eye_tracking: calibration

        Now we'll calibrate the eye tracker. Please try to keep your head still and within the rectangle you see in your webcam video. When you do so, the rectangle turns green.

        In the next part of this experiment, the webcam video disappears. It will reappear when your head is too from the rectangle. If this happens, please move back into view. White squares appears at different locations on the screen. Please click each square with your mouse.

        Click anywhere to continue...
    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine calibration_trial
    PolygonComponent calibration_square
      fillColor = $[1,1,1]
      lineWidth = 0
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_3
      clickable = calibration_square
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent calibration_code
      Code Type = JS
      Begin JS Routine:
        // Position calibration_square using width and height of window
        var canvas = psychoJS.window.size;
        var scaling = [
          canvas[0] <= canvas[1]? 1: canvas[0] / canvas[1],
          canvas[1] <= canvas[0]? 1: canvas[1] / canvas[0]
        ];
        var newPos = [
            calibration_x * scaling[0],
            calibration_y * scaling[1]
        ];
        console.log(newPos);
        calibration_square.setPos(newPos);
      Each JS Frame:
        // Hide webcam thumbnail if eyes are in validation box
        if (webgazer.checkEyesInValidationBox() === true) {
          // If last time that eyes were outside of validation box was longer than
          // window.eyesReturnedDelay ago, hide thumbnail
          if (
            document.getElementById('webgazerFaceFeedbackBox').style.display != 'none' &&
            (new Date).getTime() > window.eyesExitedTimestamp + window.eyesReturnedDelay
          ) {
            document.getElementById('webgazerFaceFeedbackBox').style.display = 'none';
            document.getElementById('webgazerVideoFeed').style.display = 'none';
          }
        } else {
            // Eyes outside of validation box; show thumbnail
            window.eyesExitedTimestamp = (new Date).getTime();
            document.getElementById('webgazerFaceFeedbackBox').style.display = 'block';
            document.getElementById('webgazerVideoFeed').style.display = 'block';
        }
  Routine tracking_trial
    PolygonComponent tracking_square
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    CodeComponent tracking_code
      Code Type = JS
      Begin JS Routine:
        // Remove the click tracker used for calibration
        window.webgazer.removeMouseEventListeners();
      Each JS Frame:
        // Hide webcam thumbnail if eyes are in validation box
        if (webgazer.checkEyesInValidationBox() === true) {
          // If last time that eyes were outside of validation box was longer than
          // window.eyesReturnedDelay ago, hide thumbnail
          if (
            document.getElementById('webgazerFaceFeedbackBox').style.display != 'none' &&
            (new Date).getTime() > window.eyesExitedTimestamp + window.eyesReturnedDelay
          ) {
            document.getElementById('webgazerFaceFeedbackBox').style.display = 'none';
            document.getElementById('webgazerVideoFeed').style.display = 'none';
          }
        } else {
            // Eyes outside of validation box; show thumbnail
            window.eyesExitedTimestamp = (new Date).getTime();
            document.getElementById('webgazerFaceFeedbackBox').style.display = 'block';
            document.getElementById('webgazerVideoFeed').style.display = 'block';
        }
        // Update tracking square to the average of last n gazes
        let x = util.sum(window.xGazes) / window.xGazes.length;
        let y = util.sum(window.yGazes) / window.yGazes.length;
        // Set tracking square to x and y, transformed to height units
        tracking_square.setPos(
          util.to_height(
            [
              x - psychoJS.window.size[0] / 2,
              -1 * (y - psychoJS.window.size[1] / 2)
            ],
            'pix',
            psychoJS.window
          )
        );
Flow
  Routine loading_trial
  Routine webcam_trial
  Routine intro_calibatrion_trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = calibration_trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('calibration_x', -0.44), ('calibration_y', -0.44)]),
      OrderedDict([('calibration_x', -0.44), ('calibration_y', -0.22)]),
      OrderedDict([('calibration_x', -0.44), ('calibration_y', 0.0)]),
      OrderedDict([('calibration_x', -0.44), ('calibration_y', 0.22)]),
      OrderedDict([('calibration_x', -0.44), ('calibration_y', 0.44)]),
      OrderedDict([('calibration_x', -0.22), ('calibration_y', -0.44)]),
      OrderedDict([('calibration_x', -0.22), ('calibration_y', -0.22)]),
      OrderedDict([('calibration_x', -0.22), ('calibration_y', 0.0)]),
      OrderedDict([('calibration_x', -0.22), ('calibration_y', 0.22)]),
      OrderedDict([('calibration_x', -0.22), ('calibration_y', 0.44)]),
      OrderedDict([('calibration_x', 0.0), ('calibration_y', -0.44)]),
      OrderedDict([('calibration_x', 0.0), ('calibration_y', -0.22)]),
      OrderedDict([('calibration_x', 0.0), ('calibration_y', 0.0)]),
      OrderedDict([('calibration_x', 0.0), ('calibration_y', 0.22)]),
      OrderedDict([('calibration_x', 0.0), ('calibration_y', 0.44)]),
      OrderedDict([('calibration_x', 0.22), ('calibration_y', -0.44)]),
      OrderedDict([('calibration_x', 0.22), ('calibration_y', -0.22)]),
      OrderedDict([('calibration_x', 0.22), ('calibration_y', 0.0)]),
      OrderedDict([('calibration_x', 0.22), ('calibration_y', 0.22)]),
      OrderedDict([('calibration_x', 0.22), ('calibration_y', 0.44)]),
      OrderedDict([('calibration_x', 0.44), ('calibration_y', -0.44)]),
      OrderedDict([('calibration_x', 0.44), ('calibration_y', -0.22)]),
      OrderedDict([('calibration_x', 0.44), ('calibration_y', 0.0)])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
    Routine calibration_trial
  LoopTerminator trials
  Routine tracking_trial
